WorkflowBuilder(Version=2.6.2)
NestedWorkflow Stim
    ExternalizedMapping(DisplayIndex)
    -> GroupWorkflow InitializeInputs
        FloatProperty(Value=0)
        -> BehaviorSubject StimContrast

        FloatProperty(Value=0)
        -> BehaviorSubject StimLocationX

        ExternalizedMapping(Connection) => #4
        -> Bonsai.Osc.ReceiveMessage(Address=/p, TypeTag=i, Connection=bpod)
        -> Bonsai.Shaders.SampleOnRenderFrame
        -> BehaviorSubject InitPosition
        #4 -> Bonsai.Osc.ReceiveMessage(Address=/c, TypeTag=f, Connection=bpod)
        -> Bonsai.Shaders.SampleOnRenderFrame
        -> BehaviorSubject Contrast
        #4 -> Bonsai.Osc.ReceiveMessage(Address=/t, TypeTag=i, Connection=bpod)
        -> Bonsai.Shaders.SampleOnRenderFrame
        -> BehaviorSubject TrialNum
        #4 -> Bonsai.Osc.ReceiveMessage(Address=/f, TypeTag=f, Connection=bpod)
        -> Bonsai.Shaders.SampleOnRenderFrame
        -> BehaviorSubject StimFreq
        #4 -> Bonsai.Osc.ReceiveMessage(Address=/a, TypeTag=f, Connection=bpod)
        -> Bonsai.Shaders.SampleOnRenderFrame
        -> BehaviorSubject StimAngle
        #4 -> Bonsai.Osc.ReceiveMessage(Address=/s, TypeTag=f, Connection=bpod)
        -> Bonsai.Shaders.SampleOnRenderFrame
        -> Bonsai.Dsp.Pow(Power=2)
        -> BehaviorSubject StimSize
        #4 -> Bonsai.Osc.ReceiveMessage(Address=/g, TypeTag=f, Connection=bpod)
        -> Bonsai.Shaders.SampleOnRenderFrame
        -> BehaviorSubject Gain
        #4 -> Bonsai.Osc.ReceiveMessage(Address=/h, TypeTag=f, Connection=bpod)
        -> Bonsai.Shaders.SampleOnRenderFrame
        -> Bonsai.Numerics.RadianToDegree
        -> BehaviorSubject StimPhase
        #4 -> Bonsai.Osc.ReceiveMessage(Address=/re, TypeTag=i, Connection=bpod)
        -> MulticastSubject BpodEvent

        Disable GroupWorkflow BpodOverrides
            FloatProperty(Value=7)
            -> Bonsai.Dsp.Pow(Power=2)
            -> MulticastSubject StimSize

            FloatProperty(Value=0)
            -> MulticastSubject StimPhase

            FloatProperty(Value=4)
            -> MulticastSubject Gain

            IntProperty(Value=-35)
            -> MulticastSubject InitPosition

            FloatProperty(Value=1)
            -> MulticastSubject Contrast

            IntProperty(Value=0)
            -> MulticastSubject TrialNum

            FloatProperty(Value=0.1)
            -> MulticastSubject StimFreq

            FloatProperty(Value=0)
            -> MulticastSubject StimAngle

            IntProperty(Value=0)
            -> MulticastSubject StimLocationX

            Bonsai.Windows.Input.KeyDown(Filter=D1, SuppressRepetitions=false)
            -> IntProperty(Value=1)
            -> MulticastSubject BpodEvent

            Bonsai.Windows.Input.KeyDown(Filter=D2, SuppressRepetitions=false)
            -> IntProperty(Value=2)
            -> MulticastSubject BpodEvent

            Bonsai.Windows.Input.KeyDown(Filter=D3, SuppressRepetitions=false)
            -> IntProperty(Value=3)
            -> MulticastSubject BpodEvent

            Bonsai.Windows.Input.KeyDown(Filter=D4, SuppressRepetitions=false)
            -> IntProperty(Value=4)
            -> MulticastSubject BpodEvent

            Bonsai.Windows.Input.KeyDown(Filter=D5, SuppressRepetitions=false)
            -> IntProperty(Value=5)
            -> MulticastSubject BpodEvent

            Bonsai.Shaders.Input.MouseMove
            -> MemberSelector(Selector=EventArgs.X)
            -> Bonsai.Dsp.Rescale(Min=0, Max=1024, RangeMin=-20, RangeMax=20, RescaleType=Linear)
            -> Bonsai.Shaders.SampleOnRenderFrame
            -> MulticastSubject Encoder

        ExternalizedMapping(Value(DisplayName=DisplayIndex))
        -> IntProperty(Value=1)
        -> BehaviorSubject Display

        FloatProperty(Value=0)
        -> BehaviorSubject StimLocationX

    ExternalizedMapping(sync_x, sync_y, TranslationZ)
    -> GroupWorkflow EnvironmentDefinition
        ExternalizedMapping(TranslationZ)
        -> GroupWorkflow CalibrationVariables
            FloatProperty(Value=0) => #0
            -> BehaviorSubject TranslationX
            #0 -> BehaviorSubject TranslationY

            ExternalizedMapping(Value(DisplayName=TranslationZ))
            -> FloatProperty(Value=-7)
            -> BehaviorSubject TranslationZ

            FloatProperty(Value=20)
            -> BehaviorSubject ScreenWidth

            FloatProperty(Value=15)
            -> BehaviorSubject ScreenHight

            SubscribeSubject TranslationZ
            -> Bonsai.Numerics.Abs
            -> PropertyMapping(Value) => #12
            SubscribeSubject ScreenWidth
            -> Divide(Operand=FloatProperty(Value=2)) => #14
            #14, #12 -> Divide(Operand=FloatProperty(Value=7))
            -> Bonsai.Numerics.Atan
            -> Bonsai.Numerics.RadianToDegree
            -> Multiply(Operand=DoubleProperty(Value=2))
            -> BehaviorSubject VisualSpan

            FloatProperty(Value=0)
            -> BehaviorSubject UpdateSyncSquare

        SubscribeSubject Display
        -> PropertyMapping(DisplayDevice)
        -> Bonsai.Shaders.CreateWindow
          Width=640
          Height=480
          VSync=On
          SwapSync=false
          ClearColor=Gray
          ClearMask="DepthBufferBit ColorBufferBit"
          CursorVisible=true
          Location=nil
          WindowBorder=Resizable
          WindowState=Fullscreen
          DisplayDevice=Second
          TargetRenderFrequency=60
          TargetUpdateFrequency=nil
          RenderState=""
          GraphicsMode
            ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
            Depth=16
            Stencil=0
            Samples=0
            AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
            Buffers=4
            Stereo=true
        -> IncludeWorkflow(Path=BonVision:Primitives.BonVisionResources.bonsai)
        -> Bonsai.Resources.LoadResources

        Bonsai.Shaders.RenderFrame => #7
        -> IncludeWorkflow(Path=BonVision:Environment.OrthographicView.bonsai, Left=-180, Right=180, Bottom=-90, Top=90)
        -> PublishSubject Draw
        -> IncludeWorkflow(Path=BonVision:Environment.SphereMapping.bonsai, FaceSize=nil, ClearColor=Gray, Width=nil, Height=nil) => #10
        SubscribeSubject TranslationY => #11
        SubscribeSubject TranslationX => #12
        SubscribeSubject TranslationZ => #13
        #12, #11, #13 -> Zip
        -> PropertyMapping(X(Selector=Item1), Y(Selector=Item2), Z(Selector=Item3))
        -> Bonsai.Vision.CreatePoint3d(X=0, Y=0, Z=-7)
        -> PropertyMapping(Translation) => #17
        SubscribeSubject ScreenWidth => #18
        SubscribeSubject ScreenHight => #19
        #18, #19 -> Zip
        -> PropertyMapping(Width(Selector=Item1), Height(Selector=Item2)) => #21
        #10, #17, #21 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=20, Height=15, Rotation(X=0, Y=0, Z=0), Translation(X=0, Y=0, Z=-7))
        #7 -> IncludeWorkflow(Path=BonVision:Environment.NormalizedView.bonsai)
        -> PublishSubject DrawSyncSquare

        SubscribeSubject DrawSyncSquare => #25
        -> IntProperty(Value=1) => #26
        SubscribeSubject UpdateSyncSquare => #27
        #26, #27 -> Sample
        -> Accumulate
        -> Bonsai.Scripting.ExpressionTransform
          Expression: it % 2
        -> PropertyMapping(ColorR, ColorG, ColorB) => #31
        ExternalizedMapping(Value(DisplayName=sync_x))
        -> FloatProperty(Value=1.23333335)
        -> PropertyMapping(LocationX) => #34
        ExternalizedMapping(Value(DisplayName=sync_y))
        -> FloatProperty(Value=-1)
        -> PropertyMapping(LocationY) => #37
        #25, #31, #34, #37 -> IncludeWorkflow
          Path=BonVision:Primitives.DrawQuad.bonsai
          ExtentX=0.2
          ExtentY=0.2
          LocationX=1.23333335
          LocationY=-1
          Layer=1
          Angle=0
          ColorR=1
          ColorG=1
          ColorB=1
          ColorA=1

        SubscribeSubject Draw => #39
        SubscribeSubject StimSize => #40
        SubscribeSubject VisualSpan
        -> PropertyMapping(Max) => #42
        #40, #42 -> Bonsai.Dsp.Rescale(Min=0, Max=110.01596088640814, RangeMin=0, RangeMax=1, RescaleType=Linear)
        -> PropertyMapping(Radius, Aperture) => #44
        SubscribeSubject StimFreq
        -> PropertyMapping(SpatialFrequency) => #46
        SubscribeSubject VisualSpan
        -> PropertyMapping(ExtentX, ExtentY) => #48
        SubscribeSubject StimLocationX
        -> PropertyMapping(LocationX) => #50
        SubscribeSubject StimContrast => #51
        -> PropertyMapping(Contrast) => #52
        #51 -> Condition ContrastZero
            WorkflowInput Source1
            -> LessThanOrEqual(Operand=FloatProperty(Value=0.01))
            -> WorkflowOutput
        -> FloatProperty(Value=0) => #54
        #51 -> Condition ContrastExist
            WorkflowInput Source1
            -> GreaterThan(Operand=FloatProperty(Value=0.01))
            -> WorkflowOutput
        -> FloatProperty(Value=1) => #56
        #56, #54 -> Merge
        -> PropertyMapping(Opacity) => #58
        SubscribeSubject StimPhase
        -> PropertyMapping(Phase) => #60
        #39, #46, #48, #44, #50, #52, #58, #60 -> IncludeWorkflow
          Path=BonVision:Primitives.DrawGratings.bonsai
          LocationX=0
          LocationY=0
          Layer=0
          Angle=0
          SpatialFrequency=0.1
          TemporalFrequency=0
          Phase=0
          SquareWave=false
          Contrast=0
          DutyCycle=nil
          Radius=0.445389926
          Aperture=0.445389926
          Opacity=0
          ExtentX=110.015961
          ExtentY=110.015961

    ExternalizedMapping(REPortName)
    -> GroupWorkflow RotaryEncoder
        ExternalizedMapping(PortName(DisplayName=REPortName))
        -> Bonsai.Bpod.Encoder(PortName=COM7) => #1
        -> Bonsai.Bpod.EncoderEvent
        -> MemberSelector(Selector="Timestamp,Data") => #3
        -> BehaviorSubject RawEncoderEvents
        #3 -> MemberSelector(Selector=Item2)
        -> Bonsai.Scripting.ExpressionTransform
          Expression: single(it)
        -> Bonsai.Shaders.SampleOnRenderFrame
        -> BehaviorSubject BpodEvent
        #1 -> Bonsai.Bpod.EncoderPosition
        -> MemberSelector(Selector="Timestamp,Position") => #10
        -> BehaviorSubject RawEncoderPositions => #11
        ExternalizedMapping("z pos") => #12
        #11, #12 -> MemberSelector(Selector=Item1)
        #10 -> MemberSelector(Selector=Item2)
        -> Bonsai.Dsp.Rescale(Min=-512, Max=512, RangeMin=-180, RangeMax=180, RescaleType=Linear)
        -> Bonsai.Shaders.SampleOnRenderFrame
        -> BehaviorSubject Encoder

    SubscribeSubject BpodEvent => #6
    -> Condition STOP
        WorkflowInput Source1
        -> Equal(Operand=FloatProperty(Value=1))
        -> WorkflowOutput
    -> SelectMany HideStimulus
        WorkflowInput Source1
        -> Take(Count=1)
        -> FloatProperty(Value=0) => #2
        -> MulticastSubject StimContrast
        -> WorkflowOutput
        #2 -> MulticastSubject UpdateSyncSquare
    #6 -> Condition "SHOW STIM"
        WorkflowInput Source1
        -> Equal(Operand=FloatProperty(Value=8))
        -> WorkflowOutput
    -> SelectMany UpdateInitPosition
      Description:
        shoud set contrast of stim to trial contrast
        probably there is no need to reset the position also
      Workflow
        WorkflowInput Source1 => #0
        SubscribeSubject InitPosition => #1
        #1, #0 -> Sample
        -> Bonsai.Scripting.ExpressionTransform
          Expression: single(it)
        -> MulticastSubject StimLocationX
        -> WorkflowOutput
    -> Bonsai.Shaders.CreateCubemapCamera(Eye(X=0, Y=0, Z=0), NearClip=0.1, FarClip=1000)
    -> Bonsai.Scripting.ExpressionTransform
      Expression:
        new(
        ViewMatrix as ViewMatrix,
        ProjectionMatrix as ProjectionMatrix,
        ViewMatrix.Row3.Yzw as Light)
    -> BehaviorSubject Draw3DStim
    -> Bonsai.Shaders.RenderCubemap(RenderState="", ClearColor=Gray, ClearMask="DepthBufferBit ColorBufferBit", FaceSize=nil, InternalFormat=Rgb, MinFilter=Linear, MagFilter=Linear)
    -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=20, Height=15, Rotation(X=0, Y=0, Z=0), Translation(X=0, Y=0, Z=-10))
    -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0, Y=0, Width=1, Height=1)

    ExternalizedMapping(FileNameTrialInfo, FileNameSyncSquareUpdate) => #17
    ExternalizedMapping(FileNameEvents) => #18
    ExternalizedMapping(FileNamePositions) => #19
    ExternalizedMapping(FileNameStimPositionScreen) => #20
    #17, #18, #19, #20 -> NestedWorkflow SaveData
      Description:
        Needs a Published Subject with the RE data stream
        Saves Rotary Encoder events, positions and trial info from pybpod
        Optionally saves ultrasonic microphone data.

        3/4 different files, as per ALF specification:
        _iblrig_encoderEvents.raw.ssv
        _iblrig_encoderPositions.raw.ssv
        _iblrig_encoderTrialInfo.raw.ssv
        Optional:
        _iblrig_micData.raw.wav
      Workflow
        SubscribeSubject StimAngle => #0
        SubscribeSubject Gain => #1
        SubscribeSubject TrialNum => #2
        SubscribeSubject InitPosition => #3
        SubscribeSubject Contrast => #4
        SubscribeSubject StimFreq => #5
        SubscribeSubject StimSize => #6
        #2, #3, #4, #5, #0, #1, #6 -> Zip => #7
        SubscribeSubject StimPhase => #8
        #7, #8 -> Zip
        -> Timestamp => #10
        ExternalizedMapping(FileName(DisplayName=FileNameTrialInfo)) => #11
        #10, #11 -> Bonsai.IO.CsvWriter
          FileName=C:\iblrig_data\Subjects\_iblrig_test_mouse\2019-07-01\008\raw_behavior_data\_iblrig_encoderTrialInfo.raw.ssv
          Append=false
          Overwrite=true
          Suffix=None
          IncludeHeader=false
          CompatibilityMode=true

        SubscribeSubject RawEncoderEvents => #13
        ExternalizedMapping(FileName(DisplayName=FileNameEvents)) => #14
        #13, #14 -> Bonsai.IO.CsvWriter
          FileName=C:\iblrig_data\Subjects\_iblrig_test_mouse\2019-07-01\008\raw_behavior_data\_iblrig_encoderEvents.raw.ssv
          Append=false
          Overwrite=true
          Suffix=None
          IncludeHeader=false
          CompatibilityMode=true

        SubscribeSubject RawEncoderPositions => #16
        ExternalizedMapping(FileName(DisplayName=FileNamePositions)) => #17
        #16, #17 -> Bonsai.IO.CsvWriter
          FileName=C:\iblrig_data\Subjects\_iblrig_test_mouse\2019-07-01\008\raw_behavior_data\_iblrig_encoderPositions.raw.ssv
          Append=false
          Overwrite=true
          Suffix=None
          IncludeHeader=false
          CompatibilityMode=true

        SubscribeSubject StimLocationX => #19
        ExternalizedMapping(FileName(DisplayName=FileNameStimPositionScreen)) => #20
        SubscribeSubject StimContrast => #21
        #21, #19 -> CombineLatest
        -> Timestamp => #23
        #23, #20 -> Bonsai.IO.CsvWriter
          FileName=C:\iblrig_data\Subjects\_iblrig_test_mouse\2019-07-01\008\raw_behavior_data\_iblrig_stimPositionScreen.raw.csv
          Append=false
          Overwrite=true
          Suffix=None
          IncludeHeader=false

        ExternalizedMapping(FileName(DisplayName=FileNameSyncSquareUpdate)) => #25
        SubscribeSubject UpdateSyncSquare
        -> Timestamp => #27
        #27, #25 -> Bonsai.IO.CsvWriter
          FileName=C:\iblrig_data\Subjects\_iblrig_test_mouse\2019-07-01\008\raw_behavior_data\_iblrig_stimSquareUpdate.csv
          Append=false
          Overwrite=true
          Suffix=None
          IncludeHeader=false

    GroupWorkflow MainRoom
        SubscribeSubject "z pos" => #0
        ExternalizedMapping(Expression) => #1
        #0, #1 -> Bonsai.Scripting.ExpressionTransform => #2
          Expression: it+50
        -> PropertyMapping(TranslationZ)
        -> GroupWorkflow Ceil
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
            ExternalizedMapping(TextureName) => #2
            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=fwn2, TextureTarget=Texture2D) => #3
            #3, #1 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=0
              TranslationY=5.99
              TranslationZ=-50
              ScaleX=100
              ScaleY=8
              ScaleZ=0
              MeshName=Plane
              Ambient(X=0.5, Y=0.5, Z=0.5)
              Diffuse(X=1, Y=1, Z=1)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              RotationZ=0
              RotationY=90
              RotationX=-90
            -> WorkflowOutput
        #2 -> PropertyMapping(TranslationZ)
        -> GroupWorkflow Floor
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
            ExternalizedMapping(TextureName) => #2
            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=fwn4, TextureTarget=Texture2D) => #3
            #3, #1 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=0
              TranslationY=-1.99
              TranslationZ=-50
              ScaleX=100
              ScaleY=8
              ScaleZ=0
              MeshName=Plane
              Ambient(X=0.5, Y=0.5, Z=0.5)
              Diffuse(X=1, Y=1, Z=1)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              RotationZ=0
              RotationY=90
              RotationX=-90
            -> WorkflowOutput
        #2 -> PropertyMapping(TranslationZ)
        -> GroupWorkflow Right
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
            ExternalizedMapping(TextureName) => #2
            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=fwn1, TextureTarget=Texture2D) => #3
            #3, #1 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=4
              TranslationY=2
              TranslationZ=-50
              ScaleX=100
              ScaleY=8
              ScaleZ=0
              MeshName=Plane
              Ambient(X=0.5, Y=0.5, Z=0.5)
              Diffuse(X=1, Y=1, Z=1)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              RotationZ=0
              RotationY=90
              RotationX=0
            -> WorkflowOutput
        #2 -> PropertyMapping(TranslationZ(Selector=it))
        -> GroupWorkflow Left
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
            ExternalizedMapping(TextureName) => #2
            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=fwn3, TextureTarget=Texture2D) => #3
            #3, #1 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=-4
              TranslationY=2
              TranslationZ=-50
              ScaleX=100
              ScaleY=8
              ScaleZ=0
              MeshName=Plane
              Ambient(X=0.5, Y=0.5, Z=0.5)
              Diffuse(X=1, Y=1, Z=1)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              RotationZ=0
              RotationY=90
              RotationX=0
            -> WorkflowOutput

    GroupWorkflow Texture1
        SubscribeSubject "z pos" => #0
        ExternalizedMapping(Expression) => #1
        #0, #1 -> Bonsai.Scripting.ExpressionTransform => #2
          Expression: it+20
        -> PropertyMapping(TranslationZ) => #3
        ExternalizedMapping(TextureName) => #4
        #3, #4 -> GroupWorkflow Ceil
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
            ExternalizedMapping(TextureName) => #2
            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D) => #3
            #3, #1 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=0
              TranslationY=5.98
              TranslationZ=-80
              ScaleX=8
              ScaleY=8
              ScaleZ=8
              MeshName=Plane
              Ambient(X=0.5, Y=0.5, Z=0.5)
              Diffuse(X=1, Y=1, Z=1)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              RotationZ=0
              RotationY=90
              RotationX=-90
            -> WorkflowOutput
        #2 -> PropertyMapping(TranslationZ) => #6
        #6, #4 -> GroupWorkflow Floor
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
            ExternalizedMapping(TextureName) => #2
            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D) => #3
            #3, #1 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=0
              TranslationY=-1.98
              TranslationZ=-80
              ScaleX=8
              ScaleY=8
              ScaleZ=8
              MeshName=Plane
              Ambient(X=0.5, Y=0.5, Z=0.5)
              Diffuse(X=1, Y=1, Z=1)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              RotationZ=0
              RotationY=90
              RotationX=-90
            -> WorkflowOutput
        #2 -> PropertyMapping(TranslationZ) => #8
        #8, #4 -> GroupWorkflow Right
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
            ExternalizedMapping(TextureName) => #2
            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D) => #3
            #3, #1 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=3.88
              TranslationY=2
              TranslationZ=-80
              ScaleX=8
              ScaleY=8
              ScaleZ=8
              MeshName=Plane
              Ambient(X=0.5, Y=0.5, Z=0.5)
              Diffuse(X=1, Y=1, Z=1)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              RotationZ=0
              RotationY=90
              RotationX=0
            -> WorkflowOutput
        #2 -> PropertyMapping(TranslationZ(Selector=it)) => #10
        #10, #4 -> GroupWorkflow Left
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
            ExternalizedMapping(TextureName) => #2
            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D) => #3
            #3, #1 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=-3.88
              TranslationY=2
              TranslationZ=-80
              ScaleX=8
              ScaleY=8
              ScaleZ=8
              MeshName=Plane
              Ambient(X=0.5, Y=0.5, Z=0.5)
              Diffuse(X=1, Y=1, Z=1)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              RotationZ=0
              RotationY=90
              RotationX=0
            -> WorkflowOutput

    GroupWorkflow Texture2
        SubscribeSubject "z pos" => #0
        ExternalizedMapping(Expression) => #1
        #0, #1 -> Bonsai.Scripting.ExpressionTransform => #2
          Expression: it+40
        -> PropertyMapping(TranslationZ) => #3
        ExternalizedMapping(TextureName) => #4
        #3, #4 -> GroupWorkflow Ceil
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
            ExternalizedMapping(TextureName) => #2
            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
            #3, #1 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=0
              TranslationY=5.98
              TranslationZ=-60
              ScaleX=8
              ScaleY=8
              ScaleZ=8
              MeshName=Plane
              Ambient(X=0.5, Y=0.5, Z=0.5)
              Diffuse(X=1, Y=1, Z=1)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              RotationZ=0
              RotationY=90
              RotationX=-90
            -> WorkflowOutput
        #2 -> PropertyMapping(TranslationZ) => #6
        #6, #4 -> GroupWorkflow Floor
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
            ExternalizedMapping(TextureName) => #2
            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
            #3, #1 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=0
              TranslationY=-1.98
              TranslationZ=-60
              ScaleX=8
              ScaleY=8
              ScaleZ=8
              MeshName=Plane
              Ambient(X=0.5, Y=0.5, Z=0.5)
              Diffuse(X=1, Y=1, Z=1)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              RotationZ=0
              RotationY=90
              RotationX=-90
            -> WorkflowOutput
        #2 -> PropertyMapping(TranslationZ) => #8
        #8, #4 -> GroupWorkflow Right
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
            ExternalizedMapping(TextureName) => #2
            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
            #3, #1 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=3.977
              TranslationY=2
              TranslationZ=-60
              ScaleX=8
              ScaleY=8
              ScaleZ=8
              MeshName=Plane
              Ambient(X=0.5, Y=0.5, Z=0.5)
              Diffuse(X=1, Y=1, Z=1)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              RotationZ=0
              RotationY=90
              RotationX=0
            -> WorkflowOutput
        #2 -> PropertyMapping(TranslationZ(Selector=it)) => #10
        #10, #4 -> GroupWorkflow Left
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
            ExternalizedMapping(TextureName) => #2
            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
            #3, #1 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=-3.88
              TranslationY=2
              TranslationZ=-60
              ScaleX=8
              ScaleY=8
              ScaleZ=8
              MeshName=Plane
              Ambient(X=0.5, Y=0.5, Z=0.5)
              Diffuse(X=1, Y=1, Z=1)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              RotationZ=0
              RotationY=90
              RotationX=0
            -> WorkflowOutput

    GroupWorkflow Texture3
        SubscribeSubject "z pos" => #0
        ExternalizedMapping(Expression) => #1
        #0, #1 -> Bonsai.Scripting.ExpressionTransform => #2
          Expression: it+60
        -> PropertyMapping(TranslationZ) => #3
        ExternalizedMapping(TextureName) => #4
        #3, #4 -> GroupWorkflow Ceil
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
            ExternalizedMapping(TextureName) => #2
            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D) => #3
            #3, #1 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=0
              TranslationY=5.98
              TranslationZ=-40
              ScaleX=8
              ScaleY=8
              ScaleZ=8
              MeshName=Plane
              Ambient(X=0.5, Y=0.5, Z=0.5)
              Diffuse(X=1, Y=1, Z=1)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              RotationZ=0
              RotationY=90
              RotationX=-90
            -> WorkflowOutput
        #2 -> PropertyMapping(TranslationZ) => #6
        #6, #4 -> GroupWorkflow Floor
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
            ExternalizedMapping(TextureName) => #2
            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D) => #3
            #3, #1 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=0
              TranslationY=-1.98
              TranslationZ=-40
              ScaleX=8
              ScaleY=8
              ScaleZ=8
              MeshName=Plane
              Ambient(X=0.5, Y=0.5, Z=0.5)
              Diffuse(X=1, Y=1, Z=1)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              RotationZ=0
              RotationY=90
              RotationX=-90
            -> WorkflowOutput
        #2 -> PropertyMapping(TranslationZ) => #8
        #8, #4 -> GroupWorkflow Right
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
            ExternalizedMapping(TextureName) => #2
            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D) => #3
            #3, #1 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=3.97
              TranslationY=2
              TranslationZ=-40
              ScaleX=8
              ScaleY=8
              ScaleZ=8
              MeshName=Plane
              Ambient(X=0.5, Y=0.5, Z=0.5)
              Diffuse(X=1, Y=1, Z=1)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              RotationZ=0
              RotationY=90
              RotationX=0
            -> WorkflowOutput
        #2 -> PropertyMapping(TranslationZ(Selector=it)) => #10
        #10, #4 -> GroupWorkflow Left
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
            ExternalizedMapping(TextureName) => #2
            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D) => #3
            #3, #1 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=-3.88
              TranslationY=2
              TranslationZ=-40
              ScaleX=8
              ScaleY=8
              ScaleZ=8
              MeshName=Plane
              Ambient(X=0.5, Y=0.5, Z=0.5)
              Diffuse(X=1, Y=1, Z=1)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              RotationZ=0
              RotationY=90
              RotationX=0
            -> WorkflowOutput

    GroupWorkflow Texture4
        SubscribeSubject "z pos" => #0
        ExternalizedMapping(Expression) => #1
        #0, #1 -> Bonsai.Scripting.ExpressionTransform => #2
          Expression: it+80
        -> PropertyMapping(TranslationZ) => #3
        ExternalizedMapping(TextureName) => #4
        #3, #4 -> GroupWorkflow Ceil
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
            ExternalizedMapping(TextureName) => #2
            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
            #3, #1 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=0
              TranslationY=5.98
              TranslationZ=-20
              ScaleX=8
              ScaleY=8
              ScaleZ=8
              MeshName=Plane
              Ambient(X=0.5, Y=0.5, Z=0.5)
              Diffuse(X=1, Y=1, Z=1)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              RotationZ=0
              RotationY=90
              RotationX=-90
            -> WorkflowOutput
        #2 -> PropertyMapping(TranslationZ) => #6
        #6, #4 -> GroupWorkflow Floor
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
            ExternalizedMapping(TextureName) => #2
            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
            #3, #1 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=0
              TranslationY=-1.98
              TranslationZ=-20
              ScaleX=8
              ScaleY=8
              ScaleZ=8
              MeshName=Plane
              Ambient(X=0.5, Y=0.5, Z=0.5)
              Diffuse(X=1, Y=1, Z=1)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              RotationZ=0
              RotationY=90
              RotationX=-90
            -> WorkflowOutput
        #2 -> PropertyMapping(TranslationZ) => #8
        #8, #4 -> GroupWorkflow Right
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
            ExternalizedMapping(TextureName) => #2
            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
            #3, #1 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=3.97
              TranslationY=2
              TranslationZ=-20
              ScaleX=8
              ScaleY=8
              ScaleZ=8
              MeshName=Plane
              Ambient(X=0.5, Y=0.5, Z=0.5)
              Diffuse(X=1, Y=1, Z=1)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              RotationZ=0
              RotationY=90
              RotationX=0
            -> WorkflowOutput
        #2 -> PropertyMapping(TranslationZ(Selector=it)) => #10
        #10, #4 -> GroupWorkflow Left
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #1
            ExternalizedMapping(TextureName) => #2
            #0, #2 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #3
            #3, #1 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=-3.88
              TranslationY=2
              TranslationZ=-20
              ScaleX=8
              ScaleY=8
              ScaleZ=8
              MeshName=Plane
              Ambient(X=0.5, Y=0.5, Z=0.5)
              Diffuse(X=1, Y=1, Z=1)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              RotationZ=0
              RotationY=90
              RotationX=0
            -> WorkflowOutput

    Bonsai.Shaders.CreateWindow
      Width=640
      Height=480
      VSync=On
      SwapSync=false
      ClearColor=Gray
      ClearMask="DepthBufferBit ColorBufferBit"
      CursorVisible=true
      Location=nil
      WindowBorder=Resizable
      WindowState=Normal
      DisplayDevice=Primary
      TargetRenderFrequency=60
      TargetUpdateFrequency=nil
      RenderState=""
      GraphicsMode
        ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
        Depth=16
        Stencil=0
        Samples=0
        AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
        Buffers=2
        Stereo=false
    -> IncludeWorkflow(Path=BonVision:Primitives.BonVisionResources.bonsai)
    -> Bonsai.Shaders.TextureResources
      Textures
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=plaid
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\plaid.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=vertGrat
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\vertGrat.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=fwn1
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\fwn1.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=fwn2
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\fwn2.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=fwn3
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\fwn3.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=fwn4
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\fwn4.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=grayEnd
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\grayEnd.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=horGrat
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\horGrat.jpg
          ColorType=Unchanged
          FlipMode=Vertical
    -> Bonsai.Resources.LoadResources
    -> WorkflowOutput
-> Take(Count=1)
-> Delay(DueTime=PT1S)
